PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '999', 'session': '001'}
  Full-screen window = True
  Monitor = Default
  Screen = 1
  Units = height
  Window size (pixels) = [1792, 1120]
  expName = RSVPLG
  keyboardBackend = ioHub
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Routines
  Routine rsvp_stream
    CodeComponent rsvpController
      Code Type = Py
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      Begin Routine:
        # trial setup code
        n_rsvp_frames = 9
        t1pos = 3
        stream_global_letters = list(navon_letters)
        stream_local_letters = stream_global_letters.copy()
        shuffle(stream_global_letters)
        shuffle(stream_local_letters)
        stream_global_letters = stream_global_letters[0:n_rsvp_frames]
        stream_local_letters = stream_local_letters[0:n_rsvp_frames]
        print(stream_global_letters)
        print(stream_local_letters)
        rsvp_frame = 0
        rsvp_status = RSVP_ISI
        myClock.reset()
      Each Frame:
        #if rsvp_frame < n_rsvp_frames
        if rsvp_status == RSVP_ISI:
            rsvp_status = RSVP_STIM
            frame_global_letter = stream_global_letters[rsvp_frame]
            frame_local_letter = stream_local_letters[rsvp_frame]
            local_letter_pos = navon_letters[frame_global_letter].GetPositions()
            responses = navon_letters[frame_global_letter].GetResponses()
            for i in range(len(local_letter_pos)):
                local_letter_stim[i].setPos(local_letter_pos[i])
                local_letter_stim[i].setText(frame_local_letter)
                local_letter_stim[i].setColor('white')
                local_letter_stim[i].setAutoDraw(True)
        elif rsvp_status == RSVP_STIM and myClock.getTime() > 5:
            rsvp_status = RSVP_DONE
            for i in range(len(local_letter_pos)):
                local_letter_stim[i].setAutoDraw(FALSE)
        elif rsvp_status == RSVP_DONE and myClock.getTime() > 7:
            continueRoutine = False
    TextComponent stim1
      letterHeight = .1
      opacity = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 4
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  Routine preTrial
    CodeComponent trial_setup
      Code Type = Py
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      Begin Routine:
        # nothing here
  Routine start_experiment
    CodeComponent experiment_setup
      Code Type = Py
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      Before Experiment:
        from math import floor

        # define stimuli and stream characteristics
        letters = ['E', 'F', 'H', 'L', 'N', 'S', 'T',
                   'U', 'Y', 'Z']
        t2letter = 'X'
        t1pos = 3 # specified in frames not array index
        t2lags = [2, 3, 4] # lag of 1 would be right after T1

        # constants for managing RSVP stream
        RSVP_STIM = 0
        RSVP_ISI = 1
        RSVP_DONE = 2
    CodeComponent stim_setup
      Code Type = Py
      Begin Experiment:
        # set up Navon letters
        localHeight = .02
        localWidth = .015
        globalHeight = .25 # originally .2
        globalWidth = .2 # originally .15
        nY = 9
        localHeight = globalHeight/nY

        class NavonLetter:
            def __init__(self, letter, responses, positions):
                self.name = letter
                self.responses = responses
                self.pos = positions

            def GetName(self):
                return self.name

            def GetResponses(self):
                return self.responses

            def GetPositions(self):
                return self.pos

            def PositionLength(self):
                return len(self.pos)

        navon_letters = dict()

        name = 'A'
        responses = ['a','A']
        positions = []
        for Idx in range(0,nY):
            positions.append([(1+Idx-nY)/2/(nY-1)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(0,nY-1):
            positions.append([-(1+Idx-nY)/2/(nY-1)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(int(nY/3),nY-int(nY/3)):
            positions.append([(.5+Idx-nY/2)/(nY-3)*globalWidth,-globalHeight/6])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'C'
        responses = ['c','C']
        positions = []
        for Idx in range(nY):
            positions.append([-sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(1,int(nY/3)):
            positions.append([sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(int(2*nY/3),nY-1):
            positions.append([sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        Idx = .25
        positions.append([sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        positions.append([-sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        positions.append([sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,-(1+Idx-nY/2)/nY*globalHeight])
        positions.append([-sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,-(1+Idx-nY/2)/nY*globalHeight])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'D'
        responses = ['d','D']
        positions = []
        for Idx in range(nY):
            positions.append([-globalWidth/2,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(1,floor(nY/2)):
            positions.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,globalHeight/2-localHeight])
        for Idx in range(1,floor(nY/2)):
            positions.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,-globalHeight/2])
        for Idx in range(0,nY):
            positions.append([sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        Idx = .25
        positions.append([sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        positions.append([sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,-(1+Idx-nY/2)/nY*globalHeight])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'E'
        responses = ['e','E']
        positions = []
        for Idx in range(nY):
            positions.append([-globalWidth/2,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(1,nY):
            positions.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,globalHeight/2-localHeight])
        for Idx in range(1,nY-1):
            positions.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,-localHeight/2])
        for Idx in range(1,nY):
            positions.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,-globalHeight/2])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'F'
        responses = ['f','F']
        positions = []
        for Idx in range(nY):
            positions.append([-globalWidth/2,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(1,nY):
            positions.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,globalHeight/2-localHeight])
        for Idx in range(1,nY-2):
            positions.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,-localHeight/2])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'H'
        responses = ['h','H']
        positions = []
        for Idx in range(nY):
            positions.append([-globalWidth/2,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(1,nY-1):
            positions.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,-localHeight/2])
        for Idx in range(nY):
            positions.append([globalWidth/2,(Idx-nY/2)/nY*globalHeight])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'L'
        responses = ['l','L']
        positions = []
        for Idx in range(nY):
            positions.append([-globalWidth/2,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(1,nY):
            positions.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,-globalHeight/2])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'M'
        responses = ['m','M']
        positions = []
        for Idx in range(nY):
            positions.append([-globalWidth/2-globalWidth/2/nY,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(0,nY-1):
            positions.append([Idx/2/(nY-1)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(1,nY-1):
            positions.append([-Idx/2/(nY-1)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(nY):
            positions.append([globalWidth/2+globalWidth/2/nY,(Idx-nY/2)/nY*globalHeight])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'N'
        responses = ['n','N']
        positions = []
        for Idx in range(nY):
            positions.append([-globalWidth/2,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(1,nY-1):
            positions.append([-(.5+Idx-nY/2)/(nY-1)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(nY):
            positions.append([globalWidth/2,(Idx-nY/2)/nY*globalHeight])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'O'
        responses = ['o','O']
        positions = []
        for Idx in range(0,nY):
            positions.append([sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(nY-1):
            positions.append([-sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        Idx = .25
        positions.append([sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        positions.append([-sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        positions.append([sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,-(1+Idx-nY/2)/nY*globalHeight])
        positions.append([-sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,-(1+Idx-nY/2)/nY*globalHeight])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'T'
        responses = ['t','T']
        positions = []
        for Idx in range(nY):
            positions.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,globalHeight/2-localHeight])
        for Idx in range(nY-1):
            positions.append([0,(Idx-nY/2)/nY*globalHeight])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'V'
        responses = ['v','V']
        positions = []
        for Idx in range(0,nY):
            positions.append([Idx/2/(nY-1)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(1,nY):
            positions.append([-Idx/2/(nY-1)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'X'
        responses = ['x','X']
        positions = []
        for Idx in range(0,nY):
            positions.append([-(.5+Idx-nY/2)/(nY-1)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(0,nY):
            positions.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        navon_letters[name] = NavonLetter(name, responses, positions)


        longestN = 0
        longestLetter = ''
        for k in iter(navon_letters):
            n = navon_letters[k].PositionLength()
            if n > longestN:
                longestN = n
                longestLetter = k
        print('longest letter is \"%s\" with %d positions' % (longestLetter, longestN))

        letters = ''.join(list(navon_letters))
        print(letters)

        local_letter_stim = list()
        for i in range(longestN):
            local_letter_stim.append(visual.TextBox2(
                win=win, name='local%02d' % i,
                text='+', pos=[0, 0],
                font='Arial', letterHeight=localHeight,
                alignment='center',
                color='red', opacity=1,
                autoDraw=False))

        # letterX = ['x','X']
        # for Idx in range(0,nY):
        #     letterX.append([-(.5+Idx-nY/2)/(nY-1)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        # for Idx in range(0,nY):
        #     letterX.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,(Idx-nY/2)/nY*globalHeight])

        # elementX = visual.TextStim(
        #     win=win, name='elementX',
        #     text='Q', font='Arial',
        #     pos=

        myClock = core.Clock()
Flow
  Routine start_experiment
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine preTrial
    Routine rsvp_stream
  LoopTerminator trials
